PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1512, 982]
  expName = MDP_middle_revision_1
  keyboardBackend = PsychToolbox
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Routines
  Routine welcome
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    TextComponent welc_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this test!

        All you need to do is keep your gaze focuesed on the middle of the screen. There will be a crosshair that will tell you where. When two stimuli will flash, all you need to do is say in which direction where the dots making up the stimuli moving.

        Press the spacebar to start it...
    KeyboardComponent welc_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #import random
        #from random import choice

        # Define positions
        positions = [
        (-5, 5), # upper left
        (0, 5), # upper middle
        (5, 5), # upper right
        (-5, 0), # left part
        (0, 0), # middle part
        (5, 0), # right part
        (-5, -5), # lower left
        (0, -5), # lower middle
        (5, -5), # lower right
        ]

        x, y = 0, 0

        i = 1

        # Loop until all positions are used
        #while positions:
            # Shuffle positions each iteration to ensure randomness
            #random.shuffle(positions)
            #x, y = positions.pop()  # Remove and get the last position
      Begin Routine:
        import random
        from random import choice

        if (i - 1 ) % 9 == 0:
            positions = [
            (-5, 5), # upper left
            (0, 5), # upper middle
            (5, 5), # upper right
            (-5, 0), # left part
            (0, 0), # middle part
            (5, 0), # right part
            (-5, -5), # lower left
            (0, -5), # lower middle
            (5, -5), # lower right
            ]



        # Loop through each position and repeat 9 times
        random.shuffle(positions)
        #for i in range(9):
        #x,y = positions[i]
            # Get the position and remove it from the list
        x, y = positions.pop()  # Get and remove the first position


            # Initialize variables
        h1 = 0
        h2 = 0
        orien = 0
        correctAns = ""

        if x > 0.5:
            orien = 0
            correctAns = "right"
            h1 = round(x*10)
            h2 = round(y*10)
            h3 = h2 + 1
            h4 = h1 + 1
        else:
            orien = 180
            correctAns = "left"
            h1 = -round(x*10)
            h2 = -round(y*10)
            h3 = h2 + 1
            h4 = h1 + 1

        thisExp.addData('mvt', orien)

        i = i + 1
    DotsComponent moving_dots
      coherence = 1.0
      dir [set every repeat] = orien
      dotLife = 3
      dotSize = 4
      fieldPos [set every repeat] = (x,y)
      fieldShape = square
      fieldSize = 5
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      pos [set every repeat] = (x, y+1)
      shape = rectangle
      size = (6, 4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
      units = cm
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine break_1
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    PolygonComponent center
      fillColor = white
      opacity = 0.3
      ori = 45
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    StaticComponent breathing_room
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        w = -5
  Routine end
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    TextComponent thx_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for giving this test a shot!
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  Routine breathing_room_2
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    StaticComponent breathing_room_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine routine_1
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Flow
  Routine welcome
  Routine break_1
  LoopInitiator loops loopType="TrialHandler"
    loopType = random
    nReps = 180
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    Routine breathing_room_2
    Routine trial
  LoopTerminator loops
  Routine end
